CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "0.tif")
    Name to assign these images:Lamin
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    Select the image type:Grayscale image
    Set intensity range from:Image bit-depth
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    Select the rule criteria:and (file does contain "1.tif")
    Name to assign these images:NLS
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['DNA染色からNucleiを定義']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
    Select the input image:NLS
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):110,600
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After declumping only
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:9
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:4.2
    Threshold correction factor:0.92
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the output objects:NuclearInside
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:6
    Fill holes in objects so that all objects shrink to a single point?:No

ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:NucleoPlasm
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:10
    Fill holes in objects so that all objects shrink to a single point?:No

MaskObjects:[module_num:8|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
    Select objects to be masked:Nuclei
    Name the masked objects:NuclearEnvelope
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:NuclearInside
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Invert the mask?:Yes

MeasureObjectIntensity:[module_num:9|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notes:['Nuclei、Cytoplasmの蛍光をYAP画像から計測']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
    Hidden:1
    Select an image to measure:Lamin
    Select objects to measure:NucleoPlasm
    Select objects to measure:NuclearEnvelope

CalculateMath:[module_num:10|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
    Name the output measurement:Rate
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:NuclearEnvelope
    Select the numerator measurement:Intensity_MeanIntensity_Lamin
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:NucleoPlasm
    Select the denominator measurement:Intensity_MeanIntensity_Lamin
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:11|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
    Select the input image:Lamin
    Name the output image:RescaleIntensity
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:12|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
    Select the input image:NLS
    Name the output image:RescaleIntensityNLS
    Rescaling method:Stretch each image to use the full intensity range
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
OverlayObjects:[module_num:13|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notes:['Cytoplasmオブジェクトとの重ね合わせ画像を作成']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
    Input:RescaleIntensity
    Name the output image:OverlayEnv
    Objects:NuclearEnvelope
    Opacity:0.3

OverlayObjects:[module_num:14|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
    Input:RescaleIntensity
    Name the output image:OverlayNuc
    Objects:NucleoPlasm
    Opacity:0.3

OverlayObjects:[module_num:15|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
    Input:RescaleIntensityNLS
    Name the output image:OverlayToNLS
    Objects:Nuclei
    Opacity:0.2

DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:NuclearEnvelope
    Measurement to display:Intensity_MeanIntensity_Lamin
    Select the image on which to display the measurements:OverlayEnv
    Text color:red
    Name the output image that has the measurements displayed:DisplayEnv
    Font size (points):12
    Number of decimals:5
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:NucleoPlasm
    Measurement to display:Intensity_MeanIntensity_Lamin
    Select the image on which to display the measurements:OverlayNuc
    Text color:red
    Name the output image that has the measurements displayed:DisplayNuc
    Font size (points):12
    Number of decimals:5
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
DisplayDataOnImage:[module_num:18|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notes:['核の番号を画像にオーバーラップ']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
    Display object or image measurements?:Object
    Select the input objects:NucleoPlasm
    Measurement to display:Math_Rate
    Select the image on which to display the measurements:OverlayToNLS
    Text color:#80FF80
    Name the output image that has the measurements displayed:DisplayRate
    Font size (points):15
    Number of decimals:2
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:DisplayEnv
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lamin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:C
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:DisplayNuc
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lamin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:B
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:DisplayRate
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lamin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:A
    Saved file format:png
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\mEmerald-LAC\\AnalyzedData\\csvfiles
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:NuclearEnvelope|Math_Rate,NucleoPlasm|Intensity_MeanIntensity_Lamin,NucleoPlasm|Math_Rate
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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